PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = discounting_block
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Routines
  Routine welcomeScreen
    TextComponent welcomeText
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to your experiment!

        The task of the game is to win as much as M&Ms as possible. You can do it by choosing between two alternatives: adjustable 4 M&Ms or standard 8 M&Ms. if you choose 4 M&Ms, it will decrease for the next round and revearsly if you choose 8 M&Ms, for the next round 4 M&Ms choice will increase. you will see the amount of your options each time.

        If you choose 4 M&Ms you will have the reward in 100% of time, if you choose 8 M&Ms you will be rewarded 67% of the times.

        You must wait before being rewarded. The reward waiting duration for choice of 4M&Ms and other M&Ms are different and they are demonstrated in the begining of each block by squares.

        There are going to be 4 blocks.

        Number of trials in the block is predefined – you can not have more trials and win more by choosing the shorter waiting duration.

        To choose options use:
        '1' for left option
        '2' for right option

        Press SPACE to start the experiment!
    KeyboardComponent welcomeResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        bb = 1
      Begin Routine:
        if (n % 2) == 0:
            tx = str(long_reward[block])+'~~~~~~~~~~~~~~~~~~~~~~'+str(short_reward[block])
        else:
            tx = str(short_reward[block])+'~~~~~~~~~~~~~~~~~~~'+str(long_reward[block])
  Routine fixFramed
    ImageComponent fixImg
      image [set every repeat] = $fixedImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $short_delay[block]
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  Routine delayFramed
    ImageComponent delayImg
      image [set every repeat] = $delayImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $long_delay[block]
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        bb = 1
      Each Frame:
        bb = 0
  Routine choiceScreen
    ImageComponent choiceImg
      image [set every repeat] = $choiceImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent choiceResp
      allowedKeys = '1', '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent choiceWarning
      color = red
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $tx
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        total = 0
        block = 0
        nk = 0

        short_reward = [4,4,4,4]
        short_delay = [1,1,1,1]

        long_reward = [8, 8, 8, 8]
        long_delay = [1,15,30,7]

        h = 'start'
        n = 0

        a = [0,0,0,0]
      Begin Routine:
        left = 0
        right = 0
      End Routine:
        thisExp.addData('small_reward', short_reward[block])
        thisExp.addData('Delay', long_delay[block])

        if (n % 2) == 0:
            left_delay = long_delay[block]
            right_delay = short_delay[block]
            if(choiceResp.keys == '1'):

                if(chanceLeft == 'You got it!'):
                    transparencyLeft = 1
                    total += long_reward[block]
                left = 1
                short_reward[block] = round(1.15*short_reward[block],2)
                h += choiceResp.keys


            elif(choiceResp.keys == '2'):
                if(chanceRight == 'You got it!'):
                    transparencyRight = 1
                    total += short_reward[block]
                right = 1
                short_reward[block] = round(0.85*short_reward[block],2)
                h += choiceResp.keys


        else:
            left_delay = short_delay[block]
            right_delay = long_delay[block]

            if(choiceResp.keys == '1'):
                if(chanceLeft == 'You got it!'):
                    transparencyLeft = 1
                    total += short_reward[block]
                left = 1
                short_reward[block] = round(0.85*short_reward[block],2)
                h += choiceResp.keys



            elif(choiceResp.keys == '2'):
                if(chanceRight == 'You got it!'):
                    transparencyRight= 1
                    total += long_reward[block]
                right = 1
                short_reward[block] = round(1.15*short_reward[block],2)
                h += choiceResp.keys


        if h[-3:] == '111' or h[-3:] == '222':

            a[block] += short_reward[block]
            nk +=1

            if nk==5:
                a[block] = a[block] / 5

                block +=1
                h = 'start'
                block_screen = 1
                bb = 1
                nk = 0
        elif short_reward[block] < 0.6 :
             a[block] = short_reward[block]
             block += 1
             h = 'start'
             block_screen = 1
             bb = 1
             nk = 0
        elif short_reward[block] > 7.2 :
             a[block] = short_reward[block]
             block += 1
             h = 'start'
             block_screen = 1
             bb = 1
             nk = 0

        repeat_text = 'total amount:' + str(round(total,2)) + ', press space to continue'
        n += 1
  Routine choiceLeft
    ImageComponent leftImg
      image [set every repeat] = $choiceImageLeft
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $left_delay
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  Routine feedbackLeft
    ImageComponent rewardImgLeft
      image [set every repeat] = $rewardImageLeft
      opacity [set every repeat] = $transparencyLeft
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent rewardText
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $chanceLeft
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    CodeComponent extract_left
      Code Type = Py
      Begin Routine:
        thisExp.addData('result of chosen',chanceLeft )
        thisExp.addData('delay of chosen', left_delay)
        thisExp.addData('reward of chosen', rewardLeft)

        thisExp.addData('total amount', total)
  Routine choiceRight
    ImageComponent rightImg
      image [set every repeat] = $choiceImageRight
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $right_delay
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  Routine feedbackRight
    ImageComponent rewardImgRight
      image [set every repeat] = $rewardImageRight
      opacity [set every repeat] = $transparencyRight
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent rightText
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $chanceRight
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    CodeComponent extract_right
      Code Type = Py
      Begin Routine:
        thisExp.addData('result of chosen',chanceRight)
        thisExp.addData('delay of chosen', right_delay)
        thisExp.addData('reward of chosen', rewardRight)

        thisExp.addData('total amount', total)
  Routine repeatScreen
    TextComponent repeatText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $repeat_text
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    KeyboardComponent repeatResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      End Experiment:
        endTex = 'Thank you ! you won' + str(total)
      End Routine:
        if block == 4:
            discountingBlockLong.finished=True
  Routine endScreen
    TextComponent endText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text:
        The experiment is finished
                         Thank you!
    CodeComponent AUC
      Code Type = Py
      Begin Routine:
        for i in range(4):
            a[i] = a[i] / a[0]

        k = (7*(a[3]+a[0]) +  8*(a[3]+a[1]) + 15*(a[1]+a[2]) ) / 58
        thisExp.addData('DelayFactor', k)
  Routine Initialization
    CodeComponent Intialization
      Code Type = Py
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      Begin Experiment:
        chance = ['You got it!', 'You did not get it!', 'You got it!','You did not get it!', 'You got it!', 'You got it!','You did not get it!','You got it!','You got it!' ]
      Begin Routine:
        if (n % 2) == 0:
            tx = str(long_reward[block])+'  for 67%'+'              '+str(short_reward[block])+'  for 100%'
            chanceLeft = chance[n%9]
            chanceRight = 'You got it!'
            transparencyRight = 1
            transparencyLeft = 0
            fixedImage = 'img/even_'+str(round(short_reward[block]))+'_square.png'
            delayImage = 'img/even_8_square_'+str(round(short_reward[block]))+'.png'
            choiceImage = 'img/even_choice_'+str(round(short_reward[block]))+'.png'
            choiceImageLeft = 'img/even_8_circle_'+str(round(short_reward[block]))+'.png'
            choiceImageRight = 'img/even_'+str(round(short_reward[block]))+'_circle.png'
            rewardImageLeft = 'img/8m&m.png'
            rewardImageRight = 'img/'+str(round(short_reward[block]))+'m&m.png'
            rewardLeft = long_reward[block]
            rewardRight = short_reward[block]
            block_screen = 0
        else:
            tx = str(short_reward[block])+'  for 100%'+'              '+str(long_reward[block])+'  for 67%'
            chanceLeft= 'You got it!'
            chanceRight= chance[n%9]
            transparencyRight = 0
            transparencyLeft = 1
            fixedImage = 'img/odd_'+str(round(short_reward[block]))+'_square.png'
            delayImage = 'img/odd_8_square_'+str(round(short_reward[block]))+'.png'
            choiceImage = 'img/odd_choice_'+str(round(short_reward[block]))+'.png'
            choiceImageLeft = 'img/odd_'+str(round(short_reward[block]))+'_circle.png'
            choiceImageRight = 'img/odd_8_circle_'+str(round(short_reward[block]))+'.png'
            rewardImageLeft = 'img/'+str(round(short_reward[block]))+'m&m.png'
            rewardImageRight = 'img/8m&m.png'
            rewardLeft = short_reward[block]
            rewardRight = long_reward[block]
            block_screen = 0
  Routine Block_screen
    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This block has ended.

        To start and experience the delay of the next block, press space.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcomeScreen
  LoopInitiator discountingBlockLong loopType="TrialHandler"
    loopType = sequential
    nReps = 200
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    Routine Initialization
    LoopInitiator blockbegin1 loopType="TrialHandler"
      loopType = random
      nReps = $bb
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      Routine fixFramed
    LoopTerminator blockbegin1
    LoopInitiator blockbegin loopType="TrialHandler"
      loopType = sequential
      nReps = $bb
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      Routine delayFramed
    LoopTerminator blockbegin
    Routine choiceScreen
    LoopInitiator choiceLeftLoop loopType="TrialHandler"
      loopType = random
      nReps = $left
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      Routine choiceLeft
      Routine feedbackLeft
    LoopTerminator choiceLeftLoop
    LoopInitiator choiceRightLoop loopType="TrialHandler"
      loopType = random
      nReps = $right
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      Routine choiceRight
      Routine feedbackRight
    LoopTerminator choiceRightLoop
    Routine repeatScreen
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = $block_screen
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      Routine Block_screen
    LoopTerminator trials
  LoopTerminator discountingBlockLong
  Routine endScreen
